WorkflowBuilder(Version=2.6.0)
GroupWorkflow "Camera acquisition"(Description="Camera acquisition")
    GroupWorkflow " Camera1"
        BooleanProperty(Value=false) => #0
        SubscribeSubject "Record trigger"
        -> Delay(DueTime=PT2S)
        -> BooleanProperty(Value=false) => #3
        #0, #3 -> Merge
        -> SelectMany "Camera subscription" => #5
            SubscribeSubject "Record trigger"
            -> Delay(DueTime=PT1S) => #1
            SubscribeSubject Cam1FPS
            -> PropertyMapping(Fps) => #3
            SubscribeSubject Cam1Indaex
            -> PropertyMapping(Index) => #5
            #3, #5 -> FpsCameraCapture(Index=1, Fps=400, Settings=0)
            -> Disable Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="")
            -> Disable Bonsai.Vision.CameraCapture(Index=2, CaptureProperties(CapturePropertyAssignment(Property=Fps, Value=400), CapturePropertyAssignment(Property=Settings, Value=0)))
            -> Bonsai.Vision.Grayscale
            -> Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=0, Width=0, Height=0)) => #10
            #10, #1 -> TakeUntil
            -> WorkflowOutput
        -> WorkflowOutput
        #5 -> Timestamp
        -> MemberSelector(Selector=Timestamp.Ticks)
        -> BehaviorSubject "Cam1 timestamps"
    -> BehaviorSubject camOutput1 => #1
    SubscribeSubject "Record trigger" => #2
    #1, #2 -> SkipUntil => #3
    SubscribeSubject "Cam1 timestamps"
    -> ElementIndex => #5
    SubscribeSubject "Record stop" => #6
    StringProperty(Value=.avi) => #7
    StringProperty(Value=.csv) => #8
    SubscribeSubject Direct
    -> GroupWorkflow Timestamp => #10
        WorkflowInput Source1
        -> Timestamp => #1
        -> MemberSelector(Selector=Timestamp.DateTime.Day)
        -> Bonsai.Scripting.PythonTransform => #3
          Script:
            @returns(str)
            def process(value):
              x = '_'+ str(value) + '_'
              return x
        #1 -> MemberSelector(Selector=Timestamp.DateTime.Date.Month)
        -> Bonsai.Scripting.PythonTransform => #5
          Script:
            @returns(str)
            def process(value):
              x = str(value) + '_'
              return x
        #1 -> MemberSelector(Selector=Timestamp.DateTime.Year)
        -> Bonsai.Scripting.PythonTransform => #7
          Script:
            @returns(str)
            def process(value):
              x = str(value) + '_'
              return x
        #1 -> MemberSelector(Selector=Value) => #8
        #8, #3, #5, #7 -> Zip
        -> Add
        -> WorkflowOutput
    SubscribeSubject Direct
    -> GroupWorkflow Timestamp => #12
        WorkflowInput Source1
        -> Timestamp => #1
        -> MemberSelector(Selector=Timestamp.DateTime.Day)
        -> Bonsai.Scripting.PythonTransform => #3
          Script:
            @returns(str)
            def process(value):
              x = '_'+ str(value) + '_'
              return x
        #1 -> MemberSelector(Selector=Timestamp.DateTime.Date.Month)
        -> Bonsai.Scripting.PythonTransform => #5
          Script:
            @returns(str)
            def process(value):
              x = str(value) + '_'
              return x
        #1 -> MemberSelector(Selector=Timestamp.DateTime.Year)
        -> Bonsai.Scripting.PythonTransform => #7
          Script:
            @returns(str)
            def process(value):
              x = str(value) + '_'
              return x
        #1 -> MemberSelector(Selector=Value) => #8
        #8, #3, #5, #7 -> Zip
        -> Add
        -> WorkflowOutput
    SubscribeSubject "cam1 Name" => #13
    #10, #13, #7 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #16
    SubscribeSubject "cam1 Name" => #17
    #12, #17, #8 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #20
    #5, #20 -> Bonsai.IO.CsvWriter(FileName=D:\Ben\FVB_awake\test_3_11_2021_400FPS_Whiskers_.csv, ListSeparator=;, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false) => #21
    #21, #2 -> SubscribeWhen => #22
    #22, #6 -> TakeUntil
    SubscribeSubject Codec
    -> PropertyMapping(FourCC) => #25
    SubscribeSubject Cam1FPS
    -> PropertyMapping(FrameRate) => #27
    SubscribeSubject Suff
    -> PropertyMapping(Suffix) => #29
    #3, #16, #25, #27, #29 -> Bonsai.Vision.VideoWriter => #30
      FileName=D:\Ben\FVB_awake\test_3_11_2021_400FPS_Whiskers_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=40
      FrameRate=400
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #30, #6 -> TakeUntil

    SubscribeSubject camOutput1
    -> WorkflowOutput

ExternalizedMapping(Value(DisplayName="Set directory and file name"))
-> PropertySource<Bonsai.Vision.VideoWriter,System.String>(MemberName=FileName, Value=D:\Ben\FVB_awake\test)
-> BehaviorSubject Direct

ExternalizedMapping(Filter(DisplayName="Press alt+'R' to start acquisition"))
-> Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Alt", SuppressRepetitions=false)
-> PublishSubject "Record trigger"

ExternalizedMapping(Filter(DisplayName="Press alt + 'Q' to stop acquisition"))
-> Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Alt", SuppressRepetitions=false)
-> PublishSubject "Record stop"

GroupWorkflow "Trigger output"
    SubscribeSubject "Record stop"
    -> IntProperty(Value=0) => #1
    SubscribeSubject "Record trigger"
    -> IntProperty(Value=10) => #3
    IntProperty(Value=1) => #4
    #1, #3, #4 -> Merge
    -> Bonsai.DAQmx.AnalogOutput
      SignalSource=""
      SampleRate=30000
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))

GroupWorkflow "Camera2 acquisition"(Description="Camera acquisition")
    GroupWorkflow "Whisker Camera"
        BooleanProperty(Value=false) => #0
        SubscribeSubject "Record trigger"
        -> Delay(DueTime=PT2S)
        -> BooleanProperty(Value=false) => #3
        #0, #3 -> Merge
        -> SelectMany Camera2 => #5
            SubscribeSubject "Record trigger"
            -> Delay(DueTime=PT1S) => #1
            SubscribeSubject Cam2FPS
            -> PropertyMapping(Fps) => #3
            SubscribeSubject Cam2Index
            -> PropertyMapping(Index) => #5
            #3, #5 -> FpsCameraCapture(Index=0, Fps=400, Settings=0)
            -> Disable Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="")
            -> Disable Bonsai.Vision.CameraCapture(Index=1, CaptureProperties(CapturePropertyAssignment(Property=Fps, Value=100), CapturePropertyAssignment(Property=Settings, Value=0)))
            -> Bonsai.Vision.Grayscale
            -> Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=0, Width=0, Height=0)) => #10
            #10, #1 -> TakeUntil
            -> WorkflowOutput
        -> WorkflowOutput
        #5 -> Timestamp
        -> MemberSelector(Selector=Timestamp.Ticks)
        -> BehaviorSubject "Cam2 timestamps"
    -> BehaviorSubject camOuput2 => #1
    SubscribeSubject "Record trigger" => #2
    #1, #2 -> SkipUntil => #3
    SubscribeSubject "Cam2 timestamps"
    -> ElementIndex => #5
    SubscribeSubject "Record stop" => #6
    StringProperty(Value=.avi) => #7
    StringProperty(Value=.csv) => #8
    SubscribeSubject Direct
    -> GroupWorkflow Timestamp => #10
        WorkflowInput Source1
        -> Timestamp => #1
        -> MemberSelector(Selector=Timestamp.DateTime.Day)
        -> Bonsai.Scripting.PythonTransform => #3
          Script:
            @returns(str)
            def process(value):
              x = '_'+ str(value) + '_'
              return x
        #1 -> MemberSelector(Selector=Timestamp.DateTime.Date.Month)
        -> Bonsai.Scripting.PythonTransform => #5
          Script:
            @returns(str)
            def process(value):
              x = str(value) + '_'
              return x
        #1 -> MemberSelector(Selector=Timestamp.DateTime.Year)
        -> Bonsai.Scripting.PythonTransform => #7
          Script:
            @returns(str)
            def process(value):
              x = str(value) + '_'
              return x
        #1 -> MemberSelector(Selector=Value) => #8
        #8, #3, #5, #7 -> Zip
        -> Add
        -> WorkflowOutput
    SubscribeSubject Direct
    -> GroupWorkflow Timestamp => #12
        WorkflowInput Source1
        -> Timestamp => #1
        -> MemberSelector(Selector=Timestamp.DateTime.Day)
        -> Bonsai.Scripting.PythonTransform => #3
          Script:
            @returns(str)
            def process(value):
              x = '_'+ str(value) + '_'
              return x
        #1 -> MemberSelector(Selector=Timestamp.DateTime.Date.Month)
        -> Bonsai.Scripting.PythonTransform => #5
          Script:
            @returns(str)
            def process(value):
              x = str(value) + '_'
              return x
        #1 -> MemberSelector(Selector=Timestamp.DateTime.Year)
        -> Bonsai.Scripting.PythonTransform => #7
          Script:
            @returns(str)
            def process(value):
              x = str(value) + '_'
              return x
        #1 -> MemberSelector(Selector=Value) => #8
        #8, #3, #5, #7 -> Zip
        -> Add
        -> WorkflowOutput
    SubscribeSubject "Cam2 name" => #13
    #12, #13, #8 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #16
    #5, #16 -> Bonsai.IO.CsvWriter(FileName=D:\Ben\FVB_awake\test_3_11_2021_400FPS_Face.csv, ListSeparator=;, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false) => #17
    #17, #2 -> SubscribeWhen => #18
    #18, #6 -> TakeUntil
    SubscribeSubject "Cam2 name" => #20
    #10, #20, #7 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #23
    SubscribeSubject Codec
    -> PropertyMapping(FourCC) => #25
    SubscribeSubject Cam2FPS
    -> PropertyMapping(FrameRate) => #27
    SubscribeSubject Suff
    -> PropertyMapping(Suffix) => #29
    #3, #23, #25, #27, #29 -> Bonsai.Vision.VideoWriter => #30
      FileName=D:\Ben\FVB_awake\test_3_11_2021_400FPS_Face.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=40
      FrameRate=400
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #30, #6 -> TakeUntil

    SubscribeSubject camOuput2
    -> WorkflowOutput

ExternalizedMapping(Value(DisplayName="cam2 Name"))
-> StringProperty(Value=400FPS_Face)
-> BehaviorSubject "Cam2 name"

ExternalizedMapping(Value(DisplayName=Cam1Name))
-> StringProperty(Value=400FPS_Whiskers_)
-> BehaviorSubject "cam1 Name"

ExternalizedMapping(Value(DisplayName="Choose codec check discription for options", Description="FMP4 for mpeg compression\r\n40 for greyscale 8 bit uncompressed"))
-> StringProperty(Value=40)
-> BehaviorSubject Codec

ExternalizedMapping(Value(DisplayName="Cam1 FPS"))
-> IntProperty(Value=400)
-> BehaviorSubject Cam1FPS

ExternalizedMapping(Value(DisplayName="Cam2 FPS"))
-> IntProperty(Value=400)
-> BehaviorSubject Cam2FPS

ExternalizedMapping(Value(DisplayName="Cam1 index"))
-> IntProperty(Value=1)
-> BehaviorSubject Cam1Indaex

ExternalizedMapping(Value(DisplayName="Cam2 index"))
-> IntProperty(Value=0)
-> BehaviorSubject Cam2Index

ExternalizedMapping(Value(DisplayName=Suffix))
-> PropertySource<Bonsai.Vision.VideoWriter,Bonsai.IO.PathSuffix>(MemberName=Suffix, Value=Timestamp)
-> BehaviorSubject Suff

GroupWorkflow "Experiment control"
    SubscribeSubject Search => #0
    GroupWorkflow "Evoked stim"(Description='Starts arduino code one minute after X time (determine in delay subscription) from first "Evoked" stim after starting recording')
        DoubleProperty(Value=5)
        -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=30000
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(AnalogOutputChannelConfiguration(ChannelName=Arduino, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
        -> WorkflowOutput
    -> DelaySubscription(DueTime=PT2S) => #2
    SubscribeSubject StopCue => #3
    SubscribeSubject Recording
    -> Delay(DueTime=PT0.1S) => #5
    SubscribeSubject StartStopAmplitude
    -> PropertyMapping(Amplitude) => #7
    #5, #7 -> Bonsai.Dsp.FunctionGenerator(BufferLength=30, Frequency=1000, Waveform=Sine, SampleRate=30000, Amplitude=3, Offset=0, Phase=0) => #8
    #0, #3, #8 -> Merge
    -> SelectMany "Activate speaker"(Description="To determine the length of the stim change buffer size")
        WorkflowInput Source1
        -> Take(Count=1) => #1
        SubscribeSubject "Speaker stim length (ms)"
        -> Multiply(Operand=DoubleProperty(Value=30))
        -> PropertyMapping(BufferSize) => #4
        #1, #4 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=30000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=600
          Channels(AnalogOutputChannelConfiguration(ChannelName=Speaker, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev3/ao1, VoltageUnits=Volts))
        -> WorkflowOutput
    SubscribeSubject "End of sound" => #11
    #2, #11 -> SubscribeWhen => #12
    #12, #3 -> TakeUntil
    -> Repeat

    GroupWorkflow "Complex auditory stimulus"
        Timer(DueTime=PT0S, Period=PT10S)
        -> Take(Count=10) => #1
        ExternalizedMapping(Value(DisplayName="siuns amp")) => #2
        #1, #2 -> SelectMany sin
            SubscribeSubject loop => #0
            IntProperty(Value=0) => #1
            #0, #1 -> Merge
            -> PropertyMapping(Value) => #3
            Timer(DueTime=PT0S, Period=PT0.5S)
            -> Take(Count=15) => #5
            -> IntProperty(Value=1)
            -> Accumulate
            -> PublishSubject loop => #8
            #5 -> IntProperty(Value=4000) => #9
            #5 -> IntProperty(Value=1800) => #10
            #10, #3 -> Multiply(Operand=IntProperty(Value=15))
            -> PropertyMapping(Value) => #12
            #9, #12 -> Add(Operand=IntProperty(Value=25200))
            -> PropertyMapping(Frequency) => #14
            ExternalizedMapping(Value) => #15
            #8, #14, #15 -> SelectMany
                ExternalizedMapping(Frequency)
                -> Bonsai.Dsp.FunctionGenerator(BufferLength=500, Frequency=29200, Waveform=Sine, SampleRate=250000, Amplitude=0.01, Offset=0, Phase=0) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Multiply(Operand=DoubleProperty(Value=5))
                -> Take(Count=20)
                -> Bonsai.DAQmx.AnalogOutput
                  SignalSource=""
                  SampleRate=250000
                  ActiveEdge=Rising
                  SampleMode=ContinuousSamples
                  BufferSize=250
                  Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev3/ao1, VoltageUnits=Volts))
                -> MemberSelector(Selector=IsInvalid)
                -> Last
                -> WorkflowOutput
            -> Last
            -> WorkflowOutput
        -> Last
        -> DelaySubscription(DueTime=PT5S) => #5
        SubscribeSubject Recording => #6
        #5, #6 -> SubscribeWhen
        -> BehaviorSubject Counter

        Timer(DueTime=PT0S, Period=PT5S)
        -> Take(Count=10) => #10
        ExternalizedMapping(Value(DisplayName="alum amp")) => #11
        #10, #11 -> SelectMany alum
            Bonsai.Audio.AudioReader(FileName=Z:\Ben\Data\aaa.wav, BufferLength=9, SampleRate=250000)
            -> Bonsai.Dsp.Rescale(Min=-5000, Max=5000, RangeMin=-0.01, RangeMax=0.01, RescaleType=Linear) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Multiply(Operand=DoubleProperty(Value=30))
            -> Bonsai.DAQmx.AnalogOutput
              SignalSource=""
              SampleRate=250000
              ActiveEdge=Rising
              SampleMode=FiniteSamples
              BufferSize=2250
              Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev3/ao1, VoltageUnits=Volts))
            -> Delay(DueTime=PT0S)
            -> RepeatCount(Count=3)
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT5S) => #13
        SubscribeSubject Counter => #14
        #13, #14 -> SubscribeWhen
        -> Last
        -> WorkflowOutput
    -> BehaviorSubject "End of sound"

    GroupWorkflow Search
      Description:
        Press 'S' to start auditory cue for searching auditory cells
        Press "D" to stop auditory cue

        Change frequancy of stim in function generator
      Workflow
        Bonsai.Windows.Input.KeyDown(Filter="MButton D Control Alt", SuppressRepetitions=false) => #0
        Bonsai.Windows.Input.KeyDown(Filter="MButton D Control", SuppressRepetitions=false) => #1
        SubscribeSubject "Speaker stim frequancey"
        -> PropertyMapping(Frequency) => #3
        SubscribeSubject "Speaker ISI (sec)"
        -> PropertyMapping(Interval) => #5
        SubscribeSubject "Speaker stim amplitude"
        -> PropertyMapping(Amplitude) => #7
        SubscribeSubject Waveform
        -> PropertyMapping(Waveform) => #9
        #3, #7, #9 -> Bonsai.Dsp.FunctionGenerator(BufferLength=300, Frequency=8000, Waveform=Sawtooth, SampleRate=30000, Amplitude=0.1, Offset=0, Phase=0) => #10
        #10, #5 -> SampleInterval(Interval=PT5S)
        -> BehaviorSubject Search => #12
        #12, #0 -> TakeUntil => #13
        #13, #1 -> SubscribeWhen
        -> Repeat
        -> WorkflowOutput

    GroupWorkflow "Record All"
      Description:
        Press "R" to start recording protocol:
        Starts the camera record
        Starts the open ephys
        Starts a protocol of auditory stimulation to determine "Evoked" response
      Workflow
        SubscribeSubject "Speaker ISI (sec)"
        -> PropertyMapping(Interval) => #1
        SubscribeSubject "# aud stim to rec"
        -> PropertyMapping(Count) => #3
        GroupWorkflow "Speaker stimulation"(Description="For more complex sounds you can combine waveforms here") => #4
            SubscribeSubject "Speaker stim frequancey"
            -> PropertyMapping(Frequency) => #1
            SubscribeSubject "Speaker stim amplitude"
            -> PropertyMapping(Amplitude) => #3
            Disable SubscribeSubject "Speaker stim frequancey"
            -> Disable Divide(Operand=DoubleProperty(Value=2))
            -> Disable PropertyMapping(Frequency) => #6
            Disable SubscribeSubject "Speaker stim amplitude"
            -> Disable PropertyMapping(Amplitude) => #8
            #6, #8 -> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=300, Frequency=10000, Waveform=Sine, SampleRate=30000, Amplitude=0.01, Offset=0, Phase=0) => #9
            Disable SubscribeSubject "Speaker stim frequancey"
            -> Disable Divide(Operand=DoubleProperty(Value=3.333))
            -> Disable PropertyMapping(Frequency) => #12
            Disable SubscribeSubject "Speaker stim amplitude"
            -> Disable PropertyMapping(Amplitude) => #14
            #12, #14 -> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=300, Frequency=6000.6000600060006, Waveform=Sine, SampleRate=30000, Amplitude=0.01, Offset=0, Phase=0) => #15
            Disable SubscribeSubject "Speaker stim frequancey"
            -> Disable Multiply(Operand=DoubleProperty(Value=1.5))
            -> Disable PropertyMapping(Frequency) => #18
            Disable SubscribeSubject "Speaker stim amplitude"
            -> Disable PropertyMapping(Amplitude) => #20
            #18, #20 -> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=300, Frequency=30000, Waveform=Sine, SampleRate=30000, Amplitude=0.01, Offset=0, Phase=0) => #21
            Disable SubscribeSubject "Speaker stim frequancey"
            -> Disable Divide(Operand=DoubleProperty(Value=4))
            -> Disable PropertyMapping(Frequency) => #24
            Disable SubscribeSubject "Speaker stim amplitude"
            -> Disable PropertyMapping(Amplitude) => #26
            #24, #26 -> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=300, Frequency=5000, Waveform=Sine, SampleRate=30000, Amplitude=0.01, Offset=0, Phase=0) => #27
            Disable SubscribeSubject "Speaker stim frequancey"
            -> Disable Divide(Operand=DoubleProperty(Value=8))
            -> Disable PropertyMapping(Frequency) => #30
            Disable SubscribeSubject "Speaker stim amplitude"
            -> Disable PropertyMapping(Amplitude) => #32
            #30, #32 -> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=300, Frequency=2500, Waveform=Sine, SampleRate=30000, Amplitude=0.01, Offset=0, Phase=0) => #33
            Disable SubscribeSubject "Speaker stim frequancey"
            -> Disable Multiply(Operand=DoubleProperty(Value=1.333))
            -> Disable PropertyMapping(Frequency) => #36
            Disable SubscribeSubject "Speaker stim amplitude"
            -> Disable PropertyMapping(Amplitude) => #38
            #36, #38 -> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=300, Frequency=26660, Waveform=Sine, SampleRate=30000, Amplitude=0.01, Offset=0, Phase=0) => #39
            SubscribeSubject Waveform
            -> PropertyMapping(Waveform) => #41
            #1, #3, #41 -> Bonsai.Dsp.FunctionGenerator(BufferLength=300, Frequency=8000, Waveform=Sawtooth, SampleRate=30000, Amplitude=0.1, Offset=0, Phase=0) => #42
            #42, #9, #15, #21, #27, #33, #39 -> Disable Zip
            -> Disable Add
            -> WorkflowOutput
        #4, #1 -> SampleInterval(Interval=PT5S) => #5
        #5, #3 -> Take(Count=1)
        -> BehaviorSubject Evoked => #7
        SubscribeSubject StartStopAmplitude
        -> PropertyMapping(Amplitude) => #9
        SubscribeSubject "Record trigger" => #10
        #7, #10 -> SubscribeWhen
        -> Repeat => #12
        #10 -> DoubleProperty(Value=5)
        -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=30000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=300
          Channels(AnalogOutputChannelConfiguration(ChannelName=Record, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
        #10 -> BehaviorSubject Recording
        SubscribeSubject "Record stop" => #16
        #16, #9 -> Bonsai.Dsp.FunctionGenerator(BufferLength=30, Frequency=1000, Waveform=Sine, SampleRate=30000, Amplitude=3, Offset=0, Phase=0)
        -> BehaviorSubject StopCue
        -> Delay(DueTime=PT1S) => #19
        -> DoubleProperty(Value=0)
        -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=30000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=300
          Channels(AnalogOutputChannelConfiguration(ChannelName=Record, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
        #12, #19 -> TakeUntil

    GroupWorkflow Initialize(Description="Initialize the analog output of Daqmax to 0")
        DoubleProperty(Value=0) => #0
        -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=30000
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(AnalogOutputChannelConfiguration(ChannelName=Arduino, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
        #0 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=30000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=1000
          Channels(AnalogOutputChannelConfiguration(ChannelName=Record, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev2/ao1, VoltageUnits=Volts))

        SubscribeSubject StopCue
        -> DoubleProperty(Value=0)
        -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=30000
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(AnalogOutputChannelConfiguration(ChannelName=Arduino, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))

    GroupWorkflow "Complex search auditory stimulus"
        Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=true) => #0
        Bonsai.Windows.Input.KeyDown(Filter=B, SuppressRepetitions=false) => #1
        Timer(DueTime=PT0S, Period=PT10S) => #2
        Timer(DueTime=PT0S, Period=PT5S) => #3
        Bonsai.Windows.Input.KeyDown(Filter="LButton A Shift", SuppressRepetitions=false) => #4
        Bonsai.Windows.Input.KeyDown(Filter="RButton B Shift", SuppressRepetitions=false) => #5
        ExternalizedMapping(Value(DisplayName="siuns amp")) => #6
        #2, #6 -> SelectMany sin => #7
            SubscribeSubject loop => #0
            IntProperty(Value=0) => #1
            #0, #1 -> Merge
            -> PropertyMapping(Value) => #3
            Timer(DueTime=PT0S, Period=PT0.5S)
            -> Take(Count=15) => #5
            -> IntProperty(Value=1)
            -> Accumulate
            -> PublishSubject loop => #8
            #5 -> IntProperty(Value=4000) => #9
            #5 -> IntProperty(Value=1800) => #10
            #10, #3 -> Multiply(Operand=IntProperty(Value=8))
            -> PropertyMapping(Value) => #12
            #9, #12 -> Add(Operand=IntProperty(Value=12600))
            -> PropertyMapping(Frequency) => #14
            ExternalizedMapping(Value) => #15
            #8, #14, #15 -> SelectMany
                ExternalizedMapping(Frequency)
                -> Bonsai.Dsp.FunctionGenerator(BufferLength=500, Frequency=16600, Waveform=Sine, SampleRate=250000, Amplitude=0.01, Offset=0, Phase=0) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Multiply(Operand=DoubleProperty(Value=5))
                -> Take(Count=20)
                -> Bonsai.DAQmx.AnalogOutput
                  SignalSource=""
                  SampleRate=250000
                  ActiveEdge=Rising
                  SampleMode=ContinuousSamples
                  BufferSize=250
                  Channels(AnalogOutputChannelConfiguration(ChannelName=Speaker, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev3/ao1, VoltageUnits=Volts))
            -> WorkflowOutput
        #7, #0 -> SubscribeWhen => #8
        ExternalizedMapping(Value(DisplayName="alum amp")) => #9
        #3, #9 -> SelectMany alum => #10
            Bonsai.Audio.AudioReader(FileName=Z:\Ben\Data\aaa.wav, BufferLength=9, SampleRate=250000)
            -> Bonsai.Dsp.Rescale(Min=-5000, Max=5000, RangeMin=-0.01, RangeMax=0.01, RescaleType=Linear) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Multiply(Operand=DoubleProperty(Value=50))
            -> Bonsai.DAQmx.AnalogOutput
              SignalSource=""
              SampleRate=250000
              ActiveEdge=Rising
              SampleMode=FiniteSamples
              BufferSize=2250
              Channels(AnalogOutputChannelConfiguration(ChannelName=Speaker, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev3/ao1, VoltageUnits=Volts))
            -> Delay(DueTime=PT0S)
            -> RepeatCount(Count=3)
            -> WorkflowOutput
        #10, #1 -> SubscribeWhen => #11
        #4, #1 -> Merge => #12
        #8, #12 -> TakeUntil
        -> Repeat
        #5, #0 -> Merge => #15
        #11, #15 -> TakeUntil
        -> Repeat

GroupWorkflow "Auditory stim Parameters"
    ExternalizedMapping(Value(DisplayName="Stim length (ms)"))
    -> IntProperty(Value=20)
    -> BehaviorSubject "Speaker stim length (ms)"

    ExternalizedMapping(Value(DisplayName=Freq))
    -> DoubleProperty(Value=8000)
    -> BehaviorSubject "Speaker stim frequancey"

    ExternalizedMapping(Value(DisplayName="ISI (sec)"))
    -> IntProperty(Value=5)
    -> Multiply(Operand=IntProperty(Value=10000000))
    -> BehaviorSubject "Speaker ISI (sec)"

    ExternalizedMapping(Value(DisplayName="Amplitude (stim)"))
    -> DoubleProperty(Value=0.1)
    -> BehaviorSubject "Speaker stim amplitude"

    ExternalizedMapping(Value(DisplayName="Number of stims"))
    -> DoubleProperty(Value=1)
    -> BehaviorSubject "# aud stim to rec"

    ExternalizedMapping(Value(DisplayName=Waveform))
    -> PropertySource<Bonsai.Dsp.FunctionGenerator,Bonsai.Dsp.FunctionWaveform>(MemberName=Waveform, Value=Sawtooth)
    -> BehaviorSubject Waveform

    ExternalizedMapping(Value(DisplayName="Z.Amp (sync cue)"))
    -> DoubleProperty(Value=3)
    -> BehaviorSubject StartStopAmplitude
