<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Camera acquisition</Name>
        <Description>Camera acquisition</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name> Camera1</Name>
              <Description />
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Record trigger</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Name>Camera subscription</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Record trigger</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Cam1FPS</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Fps" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Cam1Indaex</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Index" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:FpsCameraCapture">
                            <p1:Index>1</p1:Index>
                            <p1:Fps>400</p1:Fps>
                            <p1:Settings>0</p1:Settings>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
                            <Combinator xsi:type="vid:VideoCaptureDevice">
                              <vid:Index>0</vid:Index>
                              <vid:CaptureProperties />
                            </Combinator>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
                            <Combinator xsi:type="cv:CameraCapture">
                              <cv:Index>2</cv:Index>
                              <cv:CaptureProperties>
                                <cv:CapturePropertyAssignment>
                                  <cv:Property>Fps</cv:Property>
                                  <cv:Value>400</cv:Value>
                                </cv:CapturePropertyAssignment>
                                <cv:CapturePropertyAssignment>
                                  <cv:Property>Settings</cv:Property>
                                  <cv:Value>0</cv:Value>
                                </cv:CapturePropertyAssignment>
                              </cv:CaptureProperties>
                            </Combinator>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:Grayscale" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:Crop">
                            <cv:RegionOfInterest>
                              <cv:X>0</cv:X>
                              <cv:Y>0</cv:Y>
                              <cv:Width>0</cv:Width>
                              <cv:Height>0</cv:Height>
                            </cv:RegionOfInterest>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="11" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="6" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.Ticks</Selector>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Cam1 timestamps</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>camOutput1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Record trigger</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SkipUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Cam1 timestamps</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Record stop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Direct</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Timestamp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.DateTime.Day</Selector>
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Script>@returns(str)
def process(value):
  x = '_'+ str(value) + '_'
  return x</scr:Script>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.DateTime.Date.Month</Selector>
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Script>@returns(str)
def process(value):
  x = str(value) + '_'
  return x</scr:Script>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.DateTime.Year</Selector>
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Script>@returns(str)
def process(value):
  x = str(value) + '_'
  return x</scr:Script>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="1" To="8" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="9" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="9" Label="Source3" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="9" Label="Source4" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Direct</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Timestamp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.DateTime.Day</Selector>
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Script>@returns(str)
def process(value):
  x = '_'+ str(value) + '_'
  return x</scr:Script>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.DateTime.Date.Month</Selector>
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Script>@returns(str)
def process(value):
  x = str(value) + '_'
  return x</scr:Script>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.DateTime.Year</Selector>
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Script>@returns(str)
def process(value):
  x = str(value) + '_'
  return x</scr:Script>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="1" To="8" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="9" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="9" Label="Source3" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="9" Label="Source4" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>cam1 Name</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>cam1 Name</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\Yael\A100__3_11_2021_400FPS_Whiskers_.csv</io:FileName>
              <io:ListSeparator>;</io:ListSeparator>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Codec</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FourCC" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Cam1FPS</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FrameRate" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Suff</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Suffix" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>D:\Yael\A100__3_11_2021_400FPS_Whiskers_.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>40</cv:FourCC>
                <cv:FrameRate>400</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>camOutput1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="2" To="22" Label="Source2" />
            <Edge From="3" To="30" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="21" Label="Source1" />
            <Edge From="6" To="23" Label="Source2" />
            <Edge From="6" To="31" Label="Source2" />
            <Edge From="7" To="14" Label="Source3" />
            <Edge From="8" To="18" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="14" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="18" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="30" Label="Source2" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="30" Label="Source3" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="30" Label="Source4" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source5" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Set directory and file name" />
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="cv:VideoWriter,sys:String">
        <MemberName>FileName</MemberName>
        <Value>D:\Yael\A100_</Value>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Direct</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Filter" DisplayName="Press ctrl+'R' to start acquisition" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>R</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Record trigger</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Filter" DisplayName="Press ctrl + 'Q' to stop acquisition" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Q</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Record stop</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Trigger output</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Record stop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Record trigger</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>10</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:AnalogOutput">
                <mx:SignalSource />
                <mx:SampleRate>30000</mx:SampleRate>
                <mx:ActiveEdge>Rising</mx:ActiveEdge>
                <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                <mx:BufferSize>1000</mx:BufferSize>
                <mx:Channels>
                  <mx:AnalogOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:MinimumValue>-10</mx:MinimumValue>
                    <mx:MaximumValue>10</mx:MaximumValue>
                    <mx:PhysicalChannel>Dev2/ao1</mx:PhysicalChannel>
                    <mx:VoltageUnits>Volts</mx:VoltageUnits>
                  </mx:AnalogOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source2" />
            <Edge From="4" To="5" Label="Source3" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Camera2 acquisition</Name>
        <Description>Camera acquisition</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>Whisker Camera</Name>
              <Description />
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Record trigger</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Name>Camera2</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Record trigger</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Cam2FPS</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Fps" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Cam2Index</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Index" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:FpsCameraCapture">
                            <p1:Index>0</p1:Index>
                            <p1:Fps>400</p1:Fps>
                            <p1:Settings>0</p1:Settings>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
                            <Combinator xsi:type="vid:VideoCaptureDevice">
                              <vid:Index>0</vid:Index>
                              <vid:CaptureProperties />
                            </Combinator>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
                            <Combinator xsi:type="cv:CameraCapture">
                              <cv:Index>1</cv:Index>
                              <cv:CaptureProperties>
                                <cv:CapturePropertyAssignment>
                                  <cv:Property>Fps</cv:Property>
                                  <cv:Value>100</cv:Value>
                                </cv:CapturePropertyAssignment>
                                <cv:CapturePropertyAssignment>
                                  <cv:Property>Settings</cv:Property>
                                  <cv:Value>0</cv:Value>
                                </cv:CapturePropertyAssignment>
                              </cv:CaptureProperties>
                            </Combinator>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:Grayscale" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:Crop">
                            <cv:RegionOfInterest>
                              <cv:X>0</cv:X>
                              <cv:Y>0</cv:Y>
                              <cv:Width>0</cv:Width>
                              <cv:Height>0</cv:Height>
                            </cv:RegionOfInterest>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="11" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="6" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.Ticks</Selector>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Cam2 timestamps</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>camOuput2</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Record trigger</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SkipUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Cam2 timestamps</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Record stop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Direct</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Timestamp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.DateTime.Day</Selector>
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Script>@returns(str)
def process(value):
  x = '_'+ str(value) + '_'
  return x</scr:Script>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.DateTime.Date.Month</Selector>
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Script>@returns(str)
def process(value):
  x = str(value) + '_'
  return x</scr:Script>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.DateTime.Year</Selector>
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Script>@returns(str)
def process(value):
  x = str(value) + '_'
  return x</scr:Script>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="1" To="8" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="9" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="9" Label="Source3" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="9" Label="Source4" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Direct</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Timestamp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.DateTime.Day</Selector>
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Script>@returns(str)
def process(value):
  x = '_'+ str(value) + '_'
  return x</scr:Script>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.DateTime.Date.Month</Selector>
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Script>@returns(str)
def process(value):
  x = str(value) + '_'
  return x</scr:Script>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.DateTime.Year</Selector>
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Script>@returns(str)
def process(value):
  x = str(value) + '_'
  return x</scr:Script>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="1" To="8" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="9" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="9" Label="Source3" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="9" Label="Source4" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Cam2 name</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\Yael\A100__3_11_2021_400FPS_Face.csv</io:FileName>
              <io:ListSeparator>;</io:ListSeparator>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Cam2 name</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Codec</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FourCC" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Cam2FPS</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FrameRate" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Suff</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Suffix" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>D:\Yael\A100__3_11_2021_400FPS_Face.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>40</cv:FourCC>
                <cv:FrameRate>400</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>camOuput2</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="2" To="18" Label="Source2" />
            <Edge From="3" To="30" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="17" Label="Source1" />
            <Edge From="6" To="19" Label="Source2" />
            <Edge From="6" To="31" Label="Source2" />
            <Edge From="7" To="21" Label="Source3" />
            <Edge From="8" To="14" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="21" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="30" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="30" Label="Source3" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="30" Label="Source4" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source5" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="cam2 Name" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>400FPS_Face</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Cam2 name</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Cam1Name" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>400FPS_Whiskers_</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>cam1 Name</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Choose codec check discription for options" Description="FMP4 for mpeg compression&#xD;&#xA;40 for greyscale 8 bit uncompressed" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>40</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Codec</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Cam1 FPS" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>400</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Cam1FPS</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Cam2 FPS" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>400</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Cam2FPS</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Cam1 index" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Cam1Indaex</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Cam2 index" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Cam2Index</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Suffix" />
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="cv:VideoWriter,io:PathSuffix">
        <MemberName>Suffix</MemberName>
        <Value>None</Value>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Suff</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>