<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Filter" DisplayName="Load Animal" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>F10</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>loadExp</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>start session</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="change settings" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Intialization params</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Set Level</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Level</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Set Difficulty</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Difficulty</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Set Time between</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>10000000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Time between</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Set Time Out</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>6</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Time Out</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Set reward time</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>reward time</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Defult</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Set Level</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Set Difficulty</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>3</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Set Time between</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>3</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Set Time Out</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>0.1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Set reward time</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Level" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Difficulty" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Time Between" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="TimeOut" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="reward Time" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="change settings" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>F1</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Set Level</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Set Difficulty</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Set Time between</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>6</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Set Time Out</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Set reward time</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="6" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="10" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="13" To="15" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="17" To="19" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="22" To="29" Label="Source1" />
            <Edge From="23" To="31" Label="Source1" />
            <Edge From="24" To="33" Label="Source1" />
            <Edge From="25" To="35" Label="Source1" />
            <Edge From="26" To="37" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="28" To="31" Label="Source2" />
            <Edge From="28" To="33" Label="Source2" />
            <Edge From="28" To="35" Label="Source2" />
            <Edge From="28" To="37" Label="Source2" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Animal ID" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Files</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Animal ID" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Path" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>F10</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>FVB102</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Animal</Name>
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="io:EnumerateDirectories,sys:String">
              <MemberName>Path</MemberName>
              <Value>E:\Ben\Dis</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\events</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="BehaviorSubject">
              <Name>path</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Animal</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SearchPattern" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Initialize files</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Path" />
                    <Property Name="SearchPattern" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="io:EnumerateDirectories">
                      <io:Path>E:\Ben\Dis</io:Path>
                      <io:SearchPattern>FVB102</io:SearchPattern>
                      <io:SearchOption>TopDirectoryOnly</io:SearchOption>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:IsEmpty" />
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>initilaize new exp</Name>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Continue with animal</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>initilaize new exp</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>New experiment created</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT4S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>start session</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>init</Name>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Events</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>User notifications</Name>
                  </Expression>
                  <Expression xsi:type="Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.5S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>press F12 to start</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>User notifications</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Continue with animal</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>path</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>_Settings.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvReader">
                    <io:FileName>E:\Ben\Dis\FVB102\events_Settings.csv</io:FileName>
                    <io:ListSeparator>,</io:ListSeparator>
                    <io:ScanPattern />
                    <io:SkipRows>0</io:SkipRows>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>params</Name>
                  </Expression>
                  <Expression xsi:type="Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Loaded </Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Animal</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Add" />
                        <Expression xsi:type="MulticastSubject">
                          <Name>User notifications</Name>
                        </Expression>
                        <Expression xsi:type="Sink">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>Press F12 to start</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>User notifications</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>loaded settings</Name>
                    <Description>Loads the last settings from an animal</Description>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Index">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="scr:PythonTransform">
                          <scr:Script>@returns(float)
def process(value):
  return float(value)</scr:Script>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>Set reward time</Name>
                        </Expression>
                        <Expression xsi:type="Index">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="scr:PythonTransform">
                          <scr:Script>@returns(float)
def process(value):
  return float(value)</scr:Script>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>Set Time Out</Name>
                        </Expression>
                        <Expression xsi:type="Index">
                          <Operand xsi:type="IntProperty">
                            <Value>2</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="scr:PythonTransform">
                          <scr:Script>@returns(float)
def process(value):
  return float(value)</scr:Script>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>Set Time between</Name>
                        </Expression>
                        <Expression xsi:type="Index">
                          <Operand xsi:type="IntProperty">
                            <Value>3</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="scr:PythonTransform">
                          <scr:Script>@returns(float)
def process(value):
  return float(value)</scr:Script>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>Set Difficulty</Name>
                        </Expression>
                        <Expression xsi:type="Index">
                          <Operand xsi:type="IntProperty">
                            <Value>4</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="scr:PythonTransform">
                          <scr:Script>@returns(float)
def process(value):
  return float(value)</scr:Script>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>Set Level</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="4" Label="Source1" />
                        <Edge From="0" To="7" Label="Source1" />
                        <Edge From="0" To="10" Label="Source1" />
                        <Edge From="0" To="13" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value> ...</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Animal</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>loadExp</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Loading animal </Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="BehaviorSubject">
                    <Name>User notifications</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="10" To="26" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="25" Label="Source2" />
                  <Edge From="17" To="20" Label="Source1" />
                  <Edge From="18" To="23" Label="Source2" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="30" To="34" Label="Source3" />
                  <Edge From="31" To="34" Label="Source2" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="2" To="5" Label="Source2" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="8" Label="Source3" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="5" To="11" Label="Source1" />
            <Edge From="6" To="8" Label="Source2" />
            <Edge From="7" To="8" Label="Source4" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Save to file</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>path</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Level</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Difficulty</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Time between</Name>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="DoubleProperty">
                <Value>10000000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Time Out</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>reward time</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Exp. type</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>initilaize new exp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>999</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>lastSettings</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>E:\Ben\Dis\FVB102\events.csv</io:FileName>
              <io:Delimiter>,</io:Delimiter>
              <io:ListSeparator />
              <io:Append>true</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>lastSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Settings filename</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>E:\Ben\Dis\FVB102\events_Settings.csv</io:FileName>
                    <io:Delimiter>,</io:Delimiter>
                    <io:ListSeparator />
                    <io:Append>false</io:Append>
                    <io:Overwrite>true</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>path</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_Settings.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="ReplaySubject">
              <Name>Settings filename</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="18" Label="Source1" />
            <Edge From="1" To="9" Label="Source1" />
            <Edge From="2" To="8" Label="Source5" />
            <Edge From="3" To="8" Label="Source4" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source3" />
            <Edge From="6" To="8" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="15" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="21" Label="Source2" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="27" To="29" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>params</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>init</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Inputs outputs</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GreaterThan">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:AnalogInput">
                <mx:SignalSource />
                <mx:SampleRate>10000</mx:SampleRate>
                <mx:ActiveEdge>Rising</mx:ActiveEdge>
                <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                <mx:BufferSize>1000</mx:BufferSize>
                <mx:SamplesPerRead>-1</mx:SamplesPerRead>
                <mx:Channels>
                  <mx:AnalogInputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:MinimumValue>-10</mx:MinimumValue>
                    <mx:MaximumValue>10</mx:MaximumValue>
                    <mx:PhysicalChannel>Dev2/ai0</mx:PhysicalChannel>
                    <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
                    <mx:VoltageUnits>Volts</mx:VoltageUnits>
                  </mx:AnalogInputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Butterworth">
                <dsp:SampleRate>44100</dsp:SampleRate>
                <dsp:Cutoff1>1</dsp:Cutoff1>
                <dsp:Cutoff2>0</dsp:Cutoff2>
                <dsp:FilterOrder>3</dsp:FilterOrder>
                <dsp:FilterType>HighPass</dsp:FilterType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Abs" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0.2</dsp:Min>
                <dsp:Max>0.3</dsp:Max>
                <dsp:RangeMin>0</dsp:RangeMin>
                <dsp:RangeMax>1</dsp:RangeMax>
                <dsp:RescaleType>Clamp</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:CountNonZero" />
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>licked</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Level</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Filter" DisplayName="Start session" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>F12</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Starting session animal </Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Animal</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="MulticastSubject">
              <Name>User notifications</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Level 0 - Lick</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Difficulty</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="P" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Time between</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Period" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>Lick reward Level 0</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="P" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Period" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT2S</rx:DueTime>
                      <rx:Period>PT3S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:CreateRandom">
                      <num:Seed xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateBinomial">
                      <p1:P>0.3</p1:P>
                      <p1:N>1</p1:N>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Exp. type</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>Give always</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Reward no lick</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>wait for lick</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>F1</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" />
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>licked</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:DistinctUntilChanged" />
                        </Expression>
                        <Expression xsi:type="Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Reward licked</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="DueTime" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT3S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>no lick</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="8" Label="Source1" />
                        <Edge From="4" To="6" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Events</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="GroupWorkflow">
                    <Name>timestamps</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timestamp" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Timestamp.DateTime.Minute</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Timestamp.DateTime.Second</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="18" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="7" To="10" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="14" Label="Source1" />
                  <Edge From="10" To="13" Label="Source1" />
                  <Edge From="11" To="15" Label="Source2" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="7" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="7" Label="Source3" />
            <Edge From="4" To="7" Label="Source4" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Level 1 - Motor</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>Motor movement only</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Difficulty</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="PropertyMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Time between</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Add">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="PropertyMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SelectMany">
                      <Name>Motor back</Name>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SelectMany">
                      <Name>Motor forward</Name>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SelectMany">
                      <Name>Lick reward Level 1</Name>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="PropertyMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>Events</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Name>Motor back</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Motor move back</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>Events</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT2S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Motor at position</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>Events</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Name>Motor forward</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Motor move forward</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>Events</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT2S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Motor at position</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>Events</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Name>Lick reward Level 1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="P" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="num:CreateRandom">
                            <num:Seed xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:CreateBinomial">
                            <p1:P>0.3</p1:P>
                            <p1:N>1</p1:N>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:Sample" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>Exp. type</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Condition">
                          <Name>Give always</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="SelectMany">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Delay">
                                  <rx:DueTime>PT1S</rx:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>Reward no lick</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Condition">
                          <Name>wait for lick</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="SelectMany">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>licked</Name>
                              </Expression>
                              <Expression xsi:type="Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>Reward_licked</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="BehaviorSubject">
                                <Name>lickk</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>no lick</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>Events</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="DueTime" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT3S</rx:DueTime>
                            <rx:Period>PT0S</rx:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source2" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="5" To="8" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="11" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="8" To="10" Label="Source1" />
                        <Edge From="9" To="11" Label="Source2" />
                        <Edge From="10" To="11" Label="Source3" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Repeat" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>F1</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Difficulty</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Time between</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="10" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="11" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="12" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="21" Label="Source1" />
                  <Edge From="20" To="21" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Exp. type</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>F1</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Sink">
        <Name>Events notification</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Experiment paused</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>User notifications</Name>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>2nd notification</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Changed settings</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>User notifications</Name>
                  </Expression>
                  <Expression xsi:type="Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.5S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>press F12 to start</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>User notifications</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>User notifications</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="16" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="18" To="22" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="22" To="25" Label="Source1" />
      <Edge From="22" To="27" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>