<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>B</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT10S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT5S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton A Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>RButton B Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="siuns amp" />
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>sin</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>loop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.5S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>15</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="PublishSubject">
              <Name>loop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>2000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>2000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="IntProperty">
                <Value>9</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>16000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Frequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Frequency" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:FunctionGenerator">
                      <dsp:BufferLength>250</dsp:BufferLength>
                      <dsp:Frequency>18000</dsp:Frequency>
                      <dsp:Waveform>Sine</dsp:Waveform>
                      <dsp:SampleRate>250000</dsp:SampleRate>
                      <dsp:Amplitude>0.01</dsp:Amplitude>
                      <dsp:Offset>0</dsp:Offset>
                      <dsp:Phase>0</dsp:Phase>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="DoubleProperty">
                      <Value>15</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>20</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="mx:AnalogOutput">
                      <mx:SignalSource />
                      <mx:SampleRate>250000</mx:SampleRate>
                      <mx:ActiveEdge>Rising</mx:ActiveEdge>
                      <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                      <mx:BufferSize>250</mx:BufferSize>
                      <mx:Channels>
                        <mx:AnalogOutputChannelConfiguration>
                          <mx:ChannelName />
                          <mx:MinimumValue>-10</mx:MinimumValue>
                          <mx:MaximumValue>10</mx:MaximumValue>
                          <mx:PhysicalChannel>Dev3/ao4</mx:PhysicalChannel>
                          <mx:VoltageUnits>Volts</mx:VoltageUnits>
                        </mx:AnalogOutputChannelConfiguration>
                      </mx:Channels>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="11" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="5" To="10" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="16" Label="Source1" />
            <Edge From="9" To="13" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source2" />
            <Edge From="15" To="16" Label="Source3" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="alum amp" />
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>alum</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioReader">
                <al:FileName>Z:\Ben\Data\aaa.wav</al:FileName>
                <al:BufferLength>9</al:BufferLength>
                <al:SampleRate>250000</al:SampleRate>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>-5000</dsp:Min>
                <dsp:Max>5000</dsp:Max>
                <dsp:RangeMin>-0.01</dsp:RangeMin>
                <dsp:RangeMax>0.01</dsp:RangeMax>
                <dsp:RescaleType>Linear</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:AnalogOutput">
                <mx:SignalSource />
                <mx:SampleRate>250000</mx:SampleRate>
                <mx:ActiveEdge>Rising</mx:ActiveEdge>
                <mx:SampleMode>FiniteSamples</mx:SampleMode>
                <mx:BufferSize>2250</mx:BufferSize>
                <mx:Channels>
                  <mx:AnalogOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:MinimumValue>-10</mx:MinimumValue>
                    <mx:MaximumValue>10</mx:MaximumValue>
                    <mx:PhysicalChannel>Dev3/ao4</mx:PhysicalChannel>
                    <mx:VoltageUnits>Volts</mx:VoltageUnits>
                  </mx:AnalogOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>10</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="8" Label="Source2" />
      <Edge From="0" To="15" Label="Source2" />
      <Edge From="1" To="11" Label="Source2" />
      <Edge From="1" To="12" Label="Source2" />
      <Edge From="2" To="7" Label="Source1" />
      <Edge From="3" To="10" Label="Source1" />
      <Edge From="4" To="12" Label="Source1" />
      <Edge From="5" To="15" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="13" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="16" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>