<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyUp">
          <wie:Filter>A</wie:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Response</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT3S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Sink">
        <Name>StimOn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LED</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Response</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Response</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Sink">
        <Name>StimOff</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LED</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Success</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Reward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Success</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Miss</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Fail</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Fail</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="BehaviorSubject" TypeArguments="sys:Boolean">
        <Name>LED</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>