WorkflowBuilder(Version=2.6.0)
GroupWorkflow "Main sfotware"
    SubscribeSubject Search => #0
    GroupWorkflow "Evoked stim"(Description='Starts arduino code one minute after X time (determine in delay subscription) from first "Evoked" stim after starting recording')
        DoubleProperty(Value=5)
        -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=30000
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(AnalogOutputChannelConfiguration(ChannelName=Arduino, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
        -> WorkflowOutput
    -> DelaySubscription(DueTime=PT2S) => #2
    SubscribeSubject StopCue => #3
    SubscribeSubject Recording
    -> Delay(DueTime=PT0.1S) => #5
    SubscribeSubject StartStopAmplitude
    -> PropertyMapping(Amplitude) => #7
    #5, #7 -> Bonsai.Dsp.FunctionGenerator(BufferLength=30, Frequency=1000, Waveform=Sine, SampleRate=30000, Amplitude=3, Offset=0, Phase=0) => #8
    #0, #3, #8 -> Merge
    -> SelectMany "Activate speaker"(Description="To determine the length of the stim change buffer size")
        WorkflowInput Source1
        -> Take(Count=1) => #1
        SubscribeSubject "Speaker stim length (ms)"
        -> Multiply(Operand=DoubleProperty(Value=30))
        -> PropertyMapping(BufferSize) => #4
        #1, #4 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=30000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=600
          Channels(AnalogOutputChannelConfiguration(ChannelName=Speaker, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev3/ao0, VoltageUnits=Volts))
        -> WorkflowOutput
    SubscribeSubject "End of sound" => #11
    #2, #11 -> SubscribeWhen => #12
    #12, #3 -> TakeUntil
    -> Repeat

    GroupWorkflow "Complex auditory stimulus"
        Timer(DueTime=PT0S, Period=PT10S)
        -> Take(Count=10) => #1
        ExternalizedMapping(Value(DisplayName="siuns amp")) => #2
        #1, #2 -> SelectMany sin
            SubscribeSubject loop => #0
            IntProperty(Value=0) => #1
            #0, #1 -> Merge
            -> PropertyMapping(Value) => #3
            Timer(DueTime=PT0S, Period=PT0.5S)
            -> Take(Count=15) => #5
            -> IntProperty(Value=1)
            -> Accumulate
            -> PublishSubject loop => #8
            #5 -> IntProperty(Value=4000) => #9
            #5 -> IntProperty(Value=1800) => #10
            #10, #3 -> Multiply(Operand=IntProperty(Value=3))
            -> PropertyMapping(Value) => #12
            #9, #12 -> Add(Operand=IntProperty(Value=3600))
            -> PropertyMapping(Frequency) => #14
            ExternalizedMapping(Value) => #15
            #8, #14, #15 -> SelectMany
                ExternalizedMapping(Frequency)
                -> Bonsai.Dsp.FunctionGenerator(BufferLength=500, Frequency=7600, Waveform=Sine, SampleRate=250000, Amplitude=0.01, Offset=0, Phase=0) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Multiply(Operand=DoubleProperty(Value=5))
                -> Take(Count=20)
                -> Bonsai.DAQmx.AnalogOutput
                  SignalSource=""
                  SampleRate=250000
                  ActiveEdge=Rising
                  SampleMode=ContinuousSamples
                  BufferSize=250
                  Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev3/ao0, VoltageUnits=Volts))
                -> MemberSelector(Selector=IsInvalid)
                -> Last
                -> WorkflowOutput
            -> Last
            -> WorkflowOutput
        -> Last
        -> DelaySubscription(DueTime=PT5S) => #5
        SubscribeSubject Recording => #6
        #5, #6 -> SubscribeWhen
        -> BehaviorSubject Counter

        Timer(DueTime=PT0S, Period=PT5S)
        -> Take(Count=10) => #10
        ExternalizedMapping(Value(DisplayName="alum amp")) => #11
        #10, #11 -> SelectMany alum
            Bonsai.Audio.AudioReader(FileName=Z:\Ben\Data\aaa.wav, BufferLength=9, SampleRate=250000)
            -> Bonsai.Dsp.Rescale(Min=-5000, Max=5000, RangeMin=-0.01, RangeMax=0.01, RescaleType=Linear) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Multiply(Operand=DoubleProperty(Value=30))
            -> Bonsai.DAQmx.AnalogOutput
              SignalSource=""
              SampleRate=250000
              ActiveEdge=Rising
              SampleMode=FiniteSamples
              BufferSize=2250
              Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev3/ao0, VoltageUnits=Volts))
            -> Delay(DueTime=PT0S)
            -> RepeatCount(Count=3)
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT5S) => #13
        SubscribeSubject Counter => #14
        #13, #14 -> SubscribeWhen
        -> Last
        -> WorkflowOutput
    -> BehaviorSubject "End of sound"

    GroupWorkflow Search
      Description:
        Press 'S' to start auditory cue for searching auditory cells
        Press "D" to stop auditory cue

        Change frequancy of stim in function generator
      Workflow
        Bonsai.Windows.Input.KeyDown(Filter="MButton D Control Alt", SuppressRepetitions=false) => #0
        Bonsai.Windows.Input.KeyDown(Filter="MButton D Control", SuppressRepetitions=false) => #1
        SubscribeSubject "Speaker stim frequancey"
        -> PropertyMapping(Frequency) => #3
        SubscribeSubject "Speaker ISI (sec)"
        -> PropertyMapping(Interval) => #5
        SubscribeSubject "Speaker stim amplitude"
        -> PropertyMapping(Amplitude) => #7
        SubscribeSubject Waveform
        -> PropertyMapping(Waveform) => #9
        #3, #7, #9 -> Bonsai.Dsp.FunctionGenerator(BufferLength=300, Frequency=8000, Waveform=Sawtooth, SampleRate=30000, Amplitude=0.1, Offset=0, Phase=0) => #10
        #10, #5 -> SampleInterval(Interval=PT5S)
        -> BehaviorSubject Search => #12
        #12, #0 -> TakeUntil => #13
        #13, #1 -> SubscribeWhen
        -> Repeat
        -> WorkflowOutput

    GroupWorkflow "Record All"
      Description:
        Press "R" to start recording protocol:
        Starts the camera record
        Starts the open ephys
        Starts a protocol of auditory stimulation to determine "Evoked" response
      Workflow
        Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Alt", SuppressRepetitions=false)
        -> BooleanProperty(Value=false) => #1
        SubscribeSubject "Speaker ISI (sec)"
        -> PropertyMapping(Interval) => #3
        Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Alt", SuppressRepetitions=false)
        -> BooleanProperty(Value=false) => #5
        SubscribeSubject "# aud stim to rec"
        -> PropertyMapping(Count) => #7
        GroupWorkflow "Speaker stimulation"(Description="For more complex sounds you can combine waveforms here") => #8
            SubscribeSubject "Speaker stim frequancey"
            -> PropertyMapping(Frequency) => #1
            SubscribeSubject "Speaker stim amplitude"
            -> PropertyMapping(Amplitude) => #3
            Disable SubscribeSubject "Speaker stim frequancey"
            -> Disable Divide(Operand=DoubleProperty(Value=2))
            -> Disable PropertyMapping(Frequency) => #6
            Disable SubscribeSubject "Speaker stim amplitude"
            -> Disable PropertyMapping(Amplitude) => #8
            #6, #8 -> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=300, Frequency=10000, Waveform=Sine, SampleRate=30000, Amplitude=0.01, Offset=0, Phase=0) => #9
            Disable SubscribeSubject "Speaker stim frequancey"
            -> Disable Divide(Operand=DoubleProperty(Value=3.333))
            -> Disable PropertyMapping(Frequency) => #12
            Disable SubscribeSubject "Speaker stim amplitude"
            -> Disable PropertyMapping(Amplitude) => #14
            #12, #14 -> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=300, Frequency=6000.6000600060006, Waveform=Sine, SampleRate=30000, Amplitude=0.01, Offset=0, Phase=0) => #15
            Disable SubscribeSubject "Speaker stim frequancey"
            -> Disable Multiply(Operand=DoubleProperty(Value=1.5))
            -> Disable PropertyMapping(Frequency) => #18
            Disable SubscribeSubject "Speaker stim amplitude"
            -> Disable PropertyMapping(Amplitude) => #20
            #18, #20 -> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=300, Frequency=30000, Waveform=Sine, SampleRate=30000, Amplitude=0.01, Offset=0, Phase=0) => #21
            Disable SubscribeSubject "Speaker stim frequancey"
            -> Disable Divide(Operand=DoubleProperty(Value=4))
            -> Disable PropertyMapping(Frequency) => #24
            Disable SubscribeSubject "Speaker stim amplitude"
            -> Disable PropertyMapping(Amplitude) => #26
            #24, #26 -> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=300, Frequency=5000, Waveform=Sine, SampleRate=30000, Amplitude=0.01, Offset=0, Phase=0) => #27
            Disable SubscribeSubject "Speaker stim frequancey"
            -> Disable Divide(Operand=DoubleProperty(Value=8))
            -> Disable PropertyMapping(Frequency) => #30
            Disable SubscribeSubject "Speaker stim amplitude"
            -> Disable PropertyMapping(Amplitude) => #32
            #30, #32 -> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=300, Frequency=2500, Waveform=Sine, SampleRate=30000, Amplitude=0.01, Offset=0, Phase=0) => #33
            Disable SubscribeSubject "Speaker stim frequancey"
            -> Disable Multiply(Operand=DoubleProperty(Value=1.333))
            -> Disable PropertyMapping(Frequency) => #36
            Disable SubscribeSubject "Speaker stim amplitude"
            -> Disable PropertyMapping(Amplitude) => #38
            #36, #38 -> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=300, Frequency=26660, Waveform=Sine, SampleRate=30000, Amplitude=0.01, Offset=0, Phase=0) => #39
            SubscribeSubject Waveform
            -> PropertyMapping(Waveform) => #41
            #1, #3, #41 -> Bonsai.Dsp.FunctionGenerator(BufferLength=300, Frequency=8000, Waveform=Sawtooth, SampleRate=30000, Amplitude=0.1, Offset=0, Phase=0) => #42
            #42, #9, #15, #21, #27, #33, #39 -> Disable Zip
            -> Disable Add
            -> WorkflowOutput
        #8, #3 -> SampleInterval(Interval=PT5S) => #9
        #9, #7 -> Take(Count=1)
        -> BehaviorSubject Evoked => #11
        SubscribeSubject StartStopAmplitude
        -> PropertyMapping(Amplitude) => #13
        SubscribeSubject "External trigger start" => #14
        #1, #14 -> Merge => #15
        #11, #15 -> SubscribeWhen
        -> Repeat => #17
        SubscribeSubject "External trigger stop" => #18
        #5, #18 -> Merge => #19
        #19, #13 -> Bonsai.Dsp.FunctionGenerator(BufferLength=30, Frequency=1000, Waveform=Sine, SampleRate=30000, Amplitude=3, Offset=0, Phase=0)
        -> BehaviorSubject StopCue
        -> Delay(DueTime=PT1S) => #22
        -> DoubleProperty(Value=0)
        -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=30000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=300
          Channels(AnalogOutputChannelConfiguration(ChannelName=Record, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
        #17, #22 -> TakeUntil
        #15 -> DoubleProperty(Value=5)
        -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=30000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=300
          Channels(AnalogOutputChannelConfiguration(ChannelName=Record, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
        #15 -> BehaviorSubject Recording

        GroupWorkflow
            Bonsai.DAQmx.AnalogInput
              SignalSource=""
              SampleRate=30000
              ActiveEdge=Rising
              SampleMode=ContinuousSamples
              BufferSize=3000
              SamplesPerRead=-1
              Channels
                AnalogInputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev2/ai2, TerminalConfiguration=Rse, VoltageUnits=Volts)
            -> Bonsai.Dsp.Rescale(Min=2, Max=4, RangeMin=0, RangeMax=1, RescaleType=Clamp)
            -> Bonsai.Dsp.Buffer(Count=10, Skip=nil)
            -> Bonsai.Dsp.Sum
            -> MemberSelector(Selector=Val0) => #4
            -> GreaterThan(Operand=DoubleProperty(Value=5))
            -> DistinctUntilChanged
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> PublishSubject "External trigger start"
            -> WorkflowOutput
            #4 -> LessThan(Operand=DoubleProperty(Value=5))
            -> DistinctUntilChanged
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Skip(Count=1)
            -> PublishSubject "External trigger stop"

    GroupWorkflow Initialize(Description="Initialize the analog output of Daqmax to 0")
        DoubleProperty(Value=0) => #0
        -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=30000
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(AnalogOutputChannelConfiguration(ChannelName=Arduino, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
        #0 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=30000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=1000
          Channels(AnalogOutputChannelConfiguration(ChannelName=Record, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))

        SubscribeSubject StopCue
        -> DoubleProperty(Value=0)
        -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=30000
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(AnalogOutputChannelConfiguration(ChannelName=Arduino, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))

    GroupWorkflow "Galvo stimulation"
        Bonsai.Windows.Input.KeyDown(Filter="Back H Control", SuppressRepetitions=false)
        -> IntProperty(Value=0) => #1
        Bonsai.Windows.Input.KeyDown(Filter="Back H Shift Alt", SuppressRepetitions=false)
        -> IntProperty(Value=0) => #3
        SubscribeSubject "Galvo stim amplitude"
        -> PropertyMapping(Amplitude) => #5
        SubscribeSubject "Galvo ISI (sec)"
        -> PropertyMapping(Interval) => #7
        SubscribeSubject "Galvo stim length (ms)"
        -> Multiply(Operand=DoubleProperty(Value=30))
        -> PropertyMapping(BufferLength) => #10
        SubscribeSubject "Galvo ISI (sec)"
        -> PropertyMapping(Period)
        -> Timer(DueTime=PT0S, Period=PT8S) => #13
        SubscribeSubject "num of cycles"
        -> PropertyMapping(Value) => #15
        IntProperty(Value=1) => #16
        SubscribeSubject "Galvo stim length (ms)"
        -> Multiply(Operand=DoubleProperty(Value=0.001)) => #18
        #16, #18 -> Zip
        -> Divide => #20
        #20, #15 -> Multiply(Operand=DoubleProperty(Value=3))
        -> PropertyMapping(Frequency) => #22
        #22, #5, #10, #13 -> Bonsai.Dsp.FunctionGenerator(BufferLength=3600, Frequency=25, Waveform=Sine, SampleRate=30000, Amplitude=1, Offset=0, Phase=0) => #23
        #23, #7 -> SampleInterval(Interval=PT8S)
        -> BehaviorSubject Galvo => #25
        SubscribeSubject "End of sound"
        -> IntProperty(Value=0) => #27
        #3, #27 -> Merge => #28
        SubscribeSubject "End of sound"
        -> Delay(DueTime=PT3M) => #30
        -> IntProperty(Value=0) => #31
        #1, #31 -> Merge => #32
        #25, #32 -> TakeUntil => #33
        #33, #28 -> SubscribeWhen
        -> Repeat
        -> WorkflowOutput
        #30 -> DoubleProperty(Value=0) => #37
        -> Disable Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=30000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=300
          Channels(AnalogOutputChannelConfiguration(ChannelName=Record, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev3/ao7, VoltageUnits=Volts))
        #37 -> Disable Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=30000
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(AnalogOutputChannelConfiguration(ChannelName=Arduino, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev3/ao3, VoltageUnits=Volts))

        SubscribeSubject Galvo
        -> SelectMany "Galvo output"
            WorkflowInput Source1
            -> Take(Count=1) => #1
            SubscribeSubject "Galvo stim length (ms)"
            -> Multiply(Operand=DoubleProperty(Value=30))
            -> PropertyMapping(BufferSize) => #4
            #1, #4 -> Bonsai.DAQmx.AnalogOutput
              SignalSource=""
              SampleRate=30000
              ActiveEdge=Rising
              SampleMode=FiniteSamples
              BufferSize=3600
              Channels(AnalogOutputChannelConfiguration(ChannelName=Galvo, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev3/ao0, VoltageUnits=Volts))
            -> WorkflowOutput

    GroupWorkflow "Complex search auditory stimulus"
        Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=true) => #0
        Bonsai.Windows.Input.KeyDown(Filter=B, SuppressRepetitions=false) => #1
        Timer(DueTime=PT0S, Period=PT10S) => #2
        Timer(DueTime=PT0S, Period=PT5S) => #3
        Bonsai.Windows.Input.KeyDown(Filter="LButton A Shift", SuppressRepetitions=false) => #4
        Bonsai.Windows.Input.KeyDown(Filter="RButton B Shift", SuppressRepetitions=false) => #5
        ExternalizedMapping(Value(DisplayName="siuns amp")) => #6
        #2, #6 -> SelectMany sin => #7
            SubscribeSubject loop => #0
            IntProperty(Value=0) => #1
            #0, #1 -> Merge
            -> PropertyMapping(Value) => #3
            Timer(DueTime=PT0S, Period=PT0.5S)
            -> Take(Count=15) => #5
            -> IntProperty(Value=1)
            -> Accumulate
            -> PublishSubject loop => #8
            #5 -> IntProperty(Value=4000) => #9
            #5 -> IntProperty(Value=1800) => #10
            #10, #3 -> Multiply(Operand=IntProperty(Value=8))
            -> PropertyMapping(Value) => #12
            #9, #12 -> Add(Operand=IntProperty(Value=12600))
            -> PropertyMapping(Frequency) => #14
            ExternalizedMapping(Value) => #15
            #8, #14, #15 -> SelectMany
                ExternalizedMapping(Frequency)
                -> Bonsai.Dsp.FunctionGenerator(BufferLength=500, Frequency=16600, Waveform=Sine, SampleRate=250000, Amplitude=0.01, Offset=0, Phase=0) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Multiply(Operand=DoubleProperty(Value=5))
                -> Take(Count=20)
                -> Bonsai.DAQmx.AnalogOutput
                  SignalSource=""
                  SampleRate=250000
                  ActiveEdge=Rising
                  SampleMode=ContinuousSamples
                  BufferSize=250
                  Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev3/ao0, VoltageUnits=Volts))
            -> WorkflowOutput
        #7, #0 -> SubscribeWhen => #8
        ExternalizedMapping(Value(DisplayName="alum amp")) => #9
        #3, #9 -> SelectMany alum => #10
            Bonsai.Audio.AudioReader(FileName=Z:\Ben\Data\aaa.wav, BufferLength=9, SampleRate=250000)
            -> Bonsai.Dsp.Rescale(Min=-5000, Max=5000, RangeMin=-0.01, RangeMax=0.01, RescaleType=Linear) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Multiply(Operand=DoubleProperty(Value=20))
            -> Bonsai.DAQmx.AnalogOutput
              SignalSource=""
              SampleRate=250000
              ActiveEdge=Rising
              SampleMode=FiniteSamples
              BufferSize=2250
              Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev3/ao0, VoltageUnits=Volts))
            -> Delay(DueTime=PT0S)
            -> RepeatCount(Count=3)
            -> WorkflowOutput
        #10, #1 -> SubscribeWhen => #11
        #4, #1 -> Merge => #12
        #8, #12 -> TakeUntil
        -> Repeat
        #5, #0 -> Merge => #15
        #11, #15 -> TakeUntil
        -> Repeat

GroupWorkflow "Auditory stim Parameters"
    ExternalizedMapping(Value(DisplayName="Stim length (ms)"))
    -> IntProperty(Value=20)
    -> BehaviorSubject "Speaker stim length (ms)"

    ExternalizedMapping(Value(DisplayName=Freq))
    -> DoubleProperty(Value=8000)
    -> BehaviorSubject "Speaker stim frequancey"

    ExternalizedMapping(Value(DisplayName="ISI (sec)"))
    -> IntProperty(Value=5)
    -> Multiply(Operand=IntProperty(Value=10000000))
    -> BehaviorSubject "Speaker ISI (sec)"

    ExternalizedMapping(Value(DisplayName="Amplitude (stim)"))
    -> DoubleProperty(Value=0.1)
    -> BehaviorSubject "Speaker stim amplitude"

    ExternalizedMapping(Value(DisplayName="Number of stims"))
    -> DoubleProperty(Value=1)
    -> BehaviorSubject "# aud stim to rec"

    ExternalizedMapping(Value(DisplayName=Waveform))
    -> PropertySource<Bonsai.Dsp.FunctionGenerator,Bonsai.Dsp.FunctionWaveform>(MemberName=Waveform, Value=Sawtooth)
    -> BehaviorSubject Waveform

    ExternalizedMapping(Value(DisplayName="Z.Amp (sync cue)"))
    -> DoubleProperty(Value=3)
    -> BehaviorSubject StartStopAmplitude

GroupWorkflow "Galvo stim Parameters"
    ExternalizedMapping(Value(DisplayName=" stim Length"))
    -> IntProperty(Value=120)
    -> BehaviorSubject "Galvo stim length (ms)"

    ExternalizedMapping(Value(DisplayName="Num of cycles"))
    -> IntProperty(Value=3)
    -> BehaviorSubject "num of cycles"

    ExternalizedMapping(Value(DisplayName="ISI (sec)"))
    -> IntProperty(Value=8)
    -> Multiply(Operand=IntProperty(Value=10000000))
    -> BehaviorSubject "Galvo ISI (sec)"

    ExternalizedMapping(Value(DisplayName=Amplitude))
    -> DoubleProperty(Value=1)
    -> BehaviorSubject "Galvo stim amplitude"
